PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=<CODE_HERE>
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['res/DVD_blue.png', 'res/DVD_red.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = black
  expName = psychojs_experiment
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Routines
  Routine trial
    ImageComponent image
      image = res/DVD_red.png
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $para.DURATION_MAP[phase]
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $para.COLOUR_MAP[colour]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $para.DURATION_MAP[phase]
      storeCorrect = True
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    CodeComponent trial_code
      Code Type = JS
      Before JS Experiment:
        // Inital parameters
        import * as para from "./src/para.js"
        // PIXI
        import * as PIXI from "./lib/pixi-legacy.min.js"

        let dim = para.dim;
        let off = para.off;
      Begin JS Routine:
        // Runs once, at the start of the trial

        // Set the stimulus colour
        image.image = para.images[colour];
        // Set the stimulus position
        image.pos[0] = (dim[0] * x) * 2 - dim[0];
        image.pos[1] =  (dim[1] * y) * 2 - dim[1];

        // You can add code that will only run on the specified phase here.
        switch(phase) {
            case 0: // PRACTICE PHASE
                break;
            case 1: // MAIN PHASE
                break;
        }
      Each JS Frame:
        // Runs on every frame of the trial

        // Animate the logo
        for(let i = 0; i < 2; i++) {
            let touch = dim[i] - image.size[i] / 2;
            if(Math.abs(image.pos[i]) > touch) {
                off[i] *= -1;
                image.pos[i] = Math.sign(image.pos[i]) * touch;
            }
            image.pos[i] += off[i];
        }
        image._needUpdate = true; // only required if you don't use a "setter" function (e.g. setPos())
      End JS Experiment:
        // Add total time taken to output
        psychoJS.experiment.addData('globalClockTime', globalClock.getTime());
        psychoJS.experiment.nextEntry();
      End JS Routine:
        // Update feedback text based on response
        if (key_resp.corr) {
            feedback_text.text = "Correct";
        } else {
            feedback_text.text = "Incorrect";
        }
  Routine feedback
    TextComponent feedback_text
      font = "Times New Roman"
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = good work!
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  Routine intro
    TextComponent intro_text
      font = "Times New Roman"
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome. In this experiment you will be watching the DVD logo and pressing 'A' if it is red, or 'L' if it is blue.

        Please press the 'space' key to continue.
    KeyboardComponent intro_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine outro
    TextComponent outro_text
      font = "Times New Roman"
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Please press any key to complete the experiment.
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    KeyboardComponent outro_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructions_text
      font = "Times New Roman"
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    KeyboardComponent instructions_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instructions_code
      Code Type = JS
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      Begin JS Routine:
        // Update instructions and debrief text for each phase
        instructions_text.text = para.instructions[phase];
        debrief_text.text = para.debrief[phase];
  Routine debrief
    TextComponent debrief_text
      font = "Times New Roman"
      letterHeight = 0.04
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent debrief_resp
      allowedKeys = 'space'
      forceEndRoutine = True
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Flow
  Routine intro
  LoopInitiator phases loopType="TrialHandler"
    conditionsFile = $para.PHASES
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $para.RUN_ORDER[phase]
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine debrief
  LoopTerminator phases
  Routine outro
